PsychoPy2experiment version="2024.2.4"
Settings
  Audio latency priority = 0
  Audio lib = ptb
  Experiment info = {'participant': '0'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = use prefs
  Window size (pixels) = [1280, 720]
  color = 1.0000, 1.0000, 1.0000
  expName = bart_exp
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine intro
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    TextboxComponent intro_txt
      bold = False
      borderColor = black
      color = black
      editable = False
      fillColor = white
      letterHeight = 0.04
      size = (1, 1.2)
      startVal [time (s)] = 0.0
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      text:
        Bu oyunda bir balon şişirme yarışmasında olabildiğince fazla para kazanmaya çalışacaksınız.

        Şişirdiğiniz her balondan, balondaki hava kadar para kazanacaksınız. Ancak balonu fazla şişirip patlatırsanız o balondan hiç kazanç sağlayamayacaksınız. Balon patladığında sesini duyabileceksiniz. İstediğiniz zaman balonu şişirmeyi bırakıp, paranızı alıp yeni balona geçebilirsiniz.

        Her bir balon patlamadan önce pompalayabildiğiniz hava miktarı farklıdır.

        Lütfen
             Balonu şişirmek için BOŞLUK tuşuna
             Balonu şişirmeyi sonlandırıp paranızı almak ve yeni balona geçmek için ENTER tuşuna basın.

        Lütfen devam etmek için BOŞLUK tuşunu kullanın.
    KeyboardComponent intro_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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    SoundComponent pop_sound
      sound [set every repeat] = assets/bang.mp3
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      volume = 0
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  Routine balloon_res
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    CodeComponent balloon_res
      Code Type = Py
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      Begin Routine:
        balloonSize=0.05
        popped=False
        nPumps=0
        no_array = list(range(1,129))
  Routine trial
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    KeyboardComponent bank_resp
      allowedKeys [set every repeat] = "space", "return"
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent update_money
      Code Type = Py
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      Begin Experiment:
        bankedEarnings=5.0
        balloonEarnings = ''
        bankedText = ''
        lastBalloonEarnings=0.0
        thisBalloonEarnings=0.0
      Begin Routine:
        thisBalloonEarnings=(pump.thisN+1)*0.10
        balloonEarnings = "Bu balondan elde edilen para:\n" + str(round(thisBalloonEarnings, 2)) + " TL"
        bankedText = "Şu ana kadarki toplam kazanç:\n" + str(round(bankedEarnings, 2)) + "TL"
      End Routine:
        #calculate cash 'earned'
        chosen = no_array[randint(0,len(no_array))]
        no_array.remove(chosen)
        print(chosen)

        if chosen == 1:
            popped = True
        else:
            popped = False

        # if balloon popped reset the earnings
        if popped:
          thisBalloonEarnings=0.0
          lastBalloonEarnings=0.0
        else:
            lastBalloonEarnings=thisBalloonEarnings

        if 'return' in bank_resp.keys:
            pump.finished = True

        if popped == True:
            pump.finished = True
    TextboxComponent reminderKeys
      bold = False
      borderColor = black
      color = black
      editable = False
      letterHeight = 0.05
      pos = (-0.7, -0.7)
      size = (0.5, 0.2)
      startVal [time (s)] = 0.0
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      text:
        Balonu şişirmek için: BOŞLUK tuşu
        Yeni balona geçmek için: ENTER tuşu
    TextboxComponent balloon_value
      bold = False
      borderColor = black
      color = black
      editable = False
      letterHeight = 0.05
      pos = (-0.7, 0.7)
      size = (0.5, 0.2)
      startVal [time (s)] = 0.0
      text [set every frame] = $balloonEarnings
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    TextboxComponent banked_value
      bold = False
      borderColor = black
      color = black
      editable = False
      letterHeight = 0.05
      pos = (0.7, 0.7)
      size = (0.5, 0.2)
      startVal [time (s)] = 0.0
      text [set every frame] = $bankedText
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    CodeComponent setBalloonSize
      Code Type = Auto->JS
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      Begin Experiment:
        balloonSize=0.08
        balloonMsgHeight=0.01
      Begin Routine:
        balloon.setPos([0, balloonSize/2-.5])
        balloon.setSize(balloonSize)
      Each Frame:
        balloonSize=0.1+(pump.thisN+1)*0.015
      End Routine:
        #save data
        trials.addData('nPumps', pump.thisN+1)
        trials.addData('size', balloonSize)
        trials.addData('earnings', thisBalloonEarnings)
        trials.addData('popped', popped)
    TextboxComponent trial_count
      bold = False
      borderColor = black
      color = black
      editable = False
      letterHeight = 0.05
      pos = (0.7, -0.7)
      size = (0.5, 0.2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $'Balon: ' + str(trials.thisN+1) +'/' + str(trials.nTotal)
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    ImageComponent balloon
      image = assets/redBalloon.png
      ori = -90
      pos [set every frame] = (0, balloonSize/2-.5)
      size [set every frame] = balloonSize
      startVal [time (s)] = 0.0
      units = height
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  Routine feedback
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    CodeComponent check_popped
      Code Type = Py
      Begin Experiment:
        feedbackText=""
      Begin Routine:
        # track the banked earnings
        bankedEarnings = bankedEarnings+lastBalloonEarnings

        #update the text
        balloonEarnings = "Bu balondan elde edilen para:\n" + str(round(thisBalloonEarnings, 2)) + " TL"
        bankedText = "Şu ana kadarki toplam kazanç:\n" + str(round(bankedEarnings, 2)) + "TL"

        pop_sound.setVolume(1)

        # play the pop sound
        if popped==True:
          feedbackText="Balonu patlattınız!"
          pop_sound.play()
        else:
          feedbackText="Bu balondan elde ettiğiniz kazanç:\n" + str(round(lastBalloonEarnings, 2)) + "TL"
    TextboxComponent feedbackTxt
      bold = False
      borderColor = black
      color = black
      editable = False
      letterHeight = 0.05
      size = (0.4, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text [set every repeat] = $feedbackText
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    TextboxComponent reminderKeys_2
      bold = False
      borderColor = black
      color = black
      editable = False
      letterHeight = 0.05
      pos = (-0.7, -0.7)
      size = (0.5, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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      text:
        Balonu şişirmek için: BOŞLUK tuşu
        Yeni balona geçmek için: ENTER tuşu
    TextboxComponent balloon_value_2
      bold = False
      borderColor = black
      color = black
      editable = False
      letterHeight = 0.05
      pos = (-0.7, 0.7)
      size = (0.5, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text [set every frame] = $balloonEarnings
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    TextboxComponent banked_value_2
      bold = False
      borderColor = black
      color = black
      editable = False
      letterHeight = 0.05
      pos = (0.7, 0.7)
      size = (0.5, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text [set every frame] = $bankedText
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    TextboxComponent trial_count_2
      bold = False
      borderColor = black
      color = black
      editable = False
      letterHeight = 0.05
      pos = (0.7, -0.7)
      size = (0.5, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text [set every repeat] = $'Balon: ' + str(trials.thisN+1) +'/' + str(trials.nTotal)
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  Routine final_score
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    CodeComponent code
      Code Type = Py
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      Begin Routine:
        scoreText="Tebrikler! Toplamda \n" + str(round(bankedEarnings, 2)) + "TL kazandınız!"
    TextboxComponent totalScore
      bold = False
      borderColor = black
      color = black
      editable = False
      letterHeight = 0.05
      size = (1, 0.7)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text [set every repeat] = $scoreText
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  Routine intro_start
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Experiment:
        countdown = 5
      Begin Routine:
        countdownText = f"Deney {countdown} saniye içinde başlayacak."
        countdown = countdown -1
    TextComponent text
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $countdownText
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Flow
  Routine intro
  LoopInitiator intro_loop loopType="TrialHandler"
    loopType = random
    nReps = 5
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    Routine intro_start
  LoopTerminator intro_loop
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 30
    random seed = 1832
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    conditions:
      [{'maxPumps': 2},
      {'maxPumps': 4},
      {'maxPumps': 6},
      {'maxPumps': 8},
      {'maxPumps': 10},
      {'maxPumps': 12},
      {'maxPumps': 14},
      {'maxPumps': 16},
      {'maxPumps': 18},
      {'maxPumps': 20},
      {'maxPumps': 22},
      {'maxPumps': 24},
      {'maxPumps': 26},
      {'maxPumps': 28},
      {'maxPumps': 30},
      {'maxPumps': 32},
      {'maxPumps': 34},
      {'maxPumps': 36},
      {'maxPumps': 38},
      {'maxPumps': 40},
      {'maxPumps': 42},
      {'maxPumps': 44},
      {'maxPumps': 46},
      {'maxPumps': 48},
      {'maxPumps': 50},
      {'maxPumps': 52},
      {'maxPumps': 54},
      {'maxPumps': 56},
      {'maxPumps': 58},
      {'maxPumps': 60}]
    Routine balloon_res
    LoopInitiator pump loopType="TrialHandler"
      loopType = random
      nReps = 128
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      Routine trial
    LoopTerminator pump
    Routine feedback
  LoopTerminator trials
  Routine final_score
